Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\Device Files\BravoMiniPHBenchCel_round_magnet_red4-6.dev
  PipettePlatesInInstanceOrder: 1
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Startup_Processes
  Process
    Plate name: Startup
    Task BuiltIn::JavaScript
      TaskScript:
        // Constants:
        var MAX_VOLUME = 175;
        var MAX_MIX_VOLUME = 160;
        var PRE_ASP = 5;
        var PRE_ASP_LARGE = 15;
        var RINSE_VOLUME = 100;

        // Get protocol parameters from global scope:
        var global = GetGlobalObject();
        if(global.runsetMode) global.updateRunset();
        var columns = global.formColumns || 1;
        var headMode = "1,2,1," + columns;
        var tipColumn = global.settings.tipColumn || [[1, 13 - columns]];
        var tipOffColumn = global.settings.tipOffColumn || [[1,1]];
        var beadColumn = global.settings.beadColumn || [[1, 1]];
        var etohColumn = global.settings.etohColumn || [[1, 1 + columns]];
        var etohAspHeight = global.settings.etohAspHeight || 1;
        var ebColumn = global.settings.ebColumn || [[1, 1 + (2 * columns)]];
        var bindColumn = global.settings.bindColumn || [[1,1]];
        var bind2Column = global.settings.bind2Column || [[1,2]];
        var sampleColumn = global.settings.sampleColumn || [[1,1]];
        var wasteColumn = global.settings.wasteColumn||  [[1,1]];
        var finalColumn = global.settings.finalColumn||  [[1,1]];
        var beadVolume1 = global.settings.beadVolume1 || 95;
        var beadVolume2 = global.settings.beadVolume2 || 30;
        var bindVolume = global.settings.bindVolume || 160;
        var totBeadVolume1 = global.settings.totBeadVolume1 || 100;
        var totBeadVolume2 = global.settings.totBeadVolume2 || 100;
        var sampleVolume = global.settings.sampleVolume || 100;
        var transferVolume = global.settings.transferVolume || 180;
        var elutionVolume = global.settings.elutionVolume || 25;
        var keepPlate = global.settings.keepPlate;

        var dph = global.dph;

        // Wash settings:
        var washVolume = 200;
        var washes = 2;
        var testMode = (global.testMode) ? true : false;
        var bindTime = testMode ? 1 : 5 * 60;
        var elutionTime = testMode ? 1 : 2 * 60;
        var ethanolDryTime = testMode ? 1 : 10 * 60;
        var pelletTime = testMode ? 1 : 60;
        var pelletTimeShort = testMode ? 1 : 30;
        var pelletTimeLong = testMode ? 1 : 180;

        // For testing:
        print("beadVolume1 = "+beadVolume1+"; sampleVolume = "+sampleVolume+"; elutionVolume = "+elutionVolume);
Main_Processes
  Process
    Plate name: NewTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: transferBeads1
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: bind1
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: transferBindMix
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: transferBeads2
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: bind2
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::User Message
      Estimated time: 51
      TaskScript: if(keepPlate) task.skip();
      Body: Replace the Eppendorf PCR plate on position 4 with a new Eppendorf PCR plate and press continue. The protocol will proceed to elute the final libraries into column 1-2 of the new plate.
      Pause process: 1
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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  Process
    Plate name: RTreagentPlate
    Plate type: 96 Deep Well PP Sqr Well V Btm
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: transferBeads1
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: transferBeads2
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: rinseTips
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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  Process
    Plate name: BindPlate
    Plate type: 96 Nunc Deep Well 1 mL
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferBeads1
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: bind1
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: transferBindMix
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: transferBeads2
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: bind2
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: removeBindMix
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: wash
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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  Process
    Plate name: SamplePlate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task Bravo::SubProcess
      Sub-process name: transferSample
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 4
    Task Bravo::SubProcess
      Sub-process name: TransferEluate
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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  Process
    Plate name: UsedTips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: elute
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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    Task Bravo::SubProcess
      Sub-process name: TransferEluate
      Static labware configuration 9: 96 Eppendorf Twin.tec PCR
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  Process
    Plate name: ReagentPlate
    Plate type: 96 Eppendorf Twin.tec PCR
    Use single instance of plate: 1
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Pipette_Process Name=TransferEluate
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_small_vol";
        var mPreAspVolume = PRE_ASP;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 0.5;
        var mDispDistance = 0.5;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = [[1,bind2Column]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 27
      TaskScript:
        task.Wellselection = [[1,bind2Column]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;

        if(keepPlate) {
        task.Wellselection = [[1,finalColumn]];
        } else {
        task.Wellselection = [[1,1]];
        }
      Location, plate: SamplePlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }

        if(keepPlate) {
        task.Wellselection = [[1,finalColumn]];
        } else {
        task.Wellselection = [[1,1]];
        }

        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: SamplePlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,tipOffColumn]];
        } else {
           task.skip();
        }
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=bind1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 0;
        var mIncubationTime = bindTime;
        var mTimerCycles = 3;
        var mMixVolume = (beadVolume1 + sampleVolume) * 0.8;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = -14;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
            task.Wellselection = [[1, tipColumn]];
        } else {
            task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = [[1,bindColumn]];
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Location, location: 5
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 79
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Wellselection = [[1,bindColumn]];
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 204
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Wellselection = [[1,bindColumn]];
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Location, location: 5
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = [[1,bindColumn]];
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = [[1,tipColumn]];
        } else {
            task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=bind2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mGetTips = false;
        var mReturnTips = true;
        var mLiquidClass = "j_extra_slow_mixing";
        var mPreAspVolume = 0;
        var mIncubationTime = bindTime;
        var mTimerCycles = 3;
        var mMixVolume = (beadVolume2 + bindVolume) * 0.8;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 8;
        var mDoTipTouch = true;
        var mTouchRetract = -7;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
            task.Wellselection = [[1,tipColumn]];
        } else {
            task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = [[1,bind2Column]];
        task.Distancefromwellbottom = 50;
        task.Liquidclass = "j_normal_large_vol";
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Location, location: 5
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 81
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Wellselection = [[1,bind2Column]];
        task.Mixcycles = mTimerCycles;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 210
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Wellselection =[[1, bind2Column]];
        task.Liquidclass = mLiquidClass;
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Location, location: 5
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = [[1,bind2Column]];
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
            task.Wellselection = [[1, tipColumn]];
        } else {
            task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=elute
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = elutionVolume;
        var mAspDistance = 1;
        var mDispDistance = 0.75;
        var mBlowoutHeight = 7;
        var mDoTipTouch = true;
        var mTouchRetract = -6;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = [[1,ebColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[1,ebColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,bind2Column]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "None";
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mLiquidClass = "j_normal_mixing";
        var mPreAspVolume = PRE_ASP;
        var mIncubationTime = elutionTime;
        var mTimerCycles = 5;
        var mMixVolume = elutionVolume * 0.8;
        var mAspDistance = 1.25;
        var mDispDistance = 1.25;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Shake
      Estimated time: 1
      Location, plate: BindPlate
      Mode: On
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 16
      TaskScript:
        // Time 5 mix cycles to calculate how
        // many corresponds to total incubation time:
        var mTimer = new Date().getTime();
        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Mixcycles = mTimerCycles;
        task.Wellselection = [[1,bind2Column]];
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 81
      TaskScript:
        // Calculate how many mix cycles that corresponds
        // to total incubation time:
        mTimer = (new Date().getTime() - mTimer) / 1000;
        var mMixCycles = Math.floor(mTimerCycles*mIncubationTime/(mTimer)) - mTimerCycles;
        print("mTimer=" + mTimer + ", mMixCycles=" + mMixCycles);
        if(mMixCycles > 0) {
           task.Mixcycles = mMixCycles;
        } else {
           task.skip();
        }

        task.Volume = mMixVolume;
        task.Liquidclass = mLiquidClass;
        task.Wellselection = [[1,bind2Column]];
        task.Aspiratedistance = mAspDistance;
        if(mAspDistance !== mDispDistance) {
            task.Dispenseatdifferentdistance = true;
            task.Dispensedistance = mDispDistance;
        } else {
            task.Dispenseatdifferentdistance = false;
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Shake
      Estimated time: 2
      Location, plate: BindPlate
      Mode: Off
      RPM: 1250
      Direction: NWSE
      Time for operation in Timed mode: 10
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Volume = mPreAspVolume;
        task.Wellselection = [[1,bind2Column]];
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Liquidclass = "j_blowout";
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTime;
      Location to use, plate: BindPlate
      Location to use, location: 7
    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,tipOffColumn]];
        } else {
           task.skip();
        }
      Location, plate: UsedTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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
  Pipette_Process Name=removeBindMix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        // var mBind2WellSelection = bind2Well;
        // var mWasteWellSelection = wasteWell;
        // var mTipSelection = tipSelection;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        var mTransferVolume = bindVolume + beadVolume2 + 10;
        var mAspDistance = 0.75;
        var mDispDistance = 30;
        var mBlowoutHeight = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = [[1,bind2Column]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        task.Wellselection = [[1,bind2Column]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 18
      TaskScript:
        task.Wellselection = [[1,wasteColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
        task.Performtiptouch = true;
        task.Whichsidestousefortiptouch = "South/North";
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[1,wasteColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1, tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=rinseTips
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_normal_medium_vol";
        var mPreAspVolume = 10;
        var mTransferVolume = RINSE_VOLUME;
        var mAspDistance = 1;
        var mDispDistance = 30;
        var mDoTipTouch = true;
        var mTouchRetract = 0;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1, tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,ebColumn]];
        task.Volume = mTransferVolume;
        task.Preaspiratevolume = PRE_ASP;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[1,wasteColumn]];
        task.Distancefromwellbottom = mDispDistance;
        task.Liquidclass = mLiquidClass;
        if(mDoTipTouch) {
            task.Performtiptouch = true;
            task.Tiptouchretractdistance = mTouchRetract;
            task.Whichsidestousefortiptouch = "South/North";
        }
      Location, plate: RTreagentPlate
      Empty tips: 1
      Liquid class: j_normal_large_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1, tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBeads1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        // var mHeadMode = headMode;
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = beadVolume1;
        var mAspDistance = 0.5;
        var mDispDistance = 1;
        var mMixVolume = (0.8 * totBeadVolume1 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * totBeadVolume1;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 0.5;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 20;
        var mDoTipTouch = true;
        var mTouchRetract = -19;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1, tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = [[1,beadColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 24
      TaskScript:
        if(mMixVolume > MAX_VOLUME) {
           mMixVolume = MAX_VOLUME * 0.8;
        }

        task.Wellselection = [[1,beadColumn]];
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;

        if((mMixAspDistance != mMixDispDistance) & (mMixVolume > 80)) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
      Location, plate: RTreagentPlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[1,beadColumn]];
        task.Volume = (mPreAspVolume / 2);
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[1,beadColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript:
        task.Wellselection = [[1,bindColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 14
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[1,bindColumn]];
        task.Volume = (mPreAspVolume / 2);
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1, tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBeads2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mGetTips = true;
        var mReturnTips = false;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 30;
        var mTransferVolume = beadVolume2;
        var mAspDistance = 0.5;
        var mDispDistance = 1;
        var mMixVolume = (0.8 * totBeadVolume2 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * totBeadVolume2;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 0.5;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = -14;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 4
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = [[1,beadColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 17
      TaskScript:
        if(mMixVolume > MAX_VOLUME) {
           mMixVolume = MAX_VOLUME * 0.8;
        }

        task.Wellselection = [[1,beadColumn]];
        task.Volume = mMixVolume;
        task.Mixcycles = mMixCycles;
        task.Liquidclass = mMixLiquidClass;
        task.Aspiratedistance = mMixAspDistance;

        if((mMixAspDistance != mMixDispDistance) & (mMixVolume > 80)) {
           task.Dispenseatdifferentdistance = true;
           task.Dispensedistance = mMixDispDistance;
        }
      Location, plate: RTreagentPlate
      Aspirate distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[1,beadColumn]];
        task.Volume = (mPreAspVolume / 2);
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(mTransferVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[1,beadColumn]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: RTreagentPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,bind2Column]];
        task.Volume = mTransferVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[1,bind2Column]];
        task.Volume = (mPreAspVolume / 2);
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Volume: 0
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferBindMix
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeLong;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        // var mWellSelection = sampleWell;
        // var mBindWellSelection = bindWell;
        // var mBind2WellSelection = bind2Well;
        // var mTipSelection = tipSelection;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_medium_vol";
        var mPreAspVolume = PRE_ASP_LARGE;
        // var mTransferVolume = transferVolume;
        var mAspDistance = 0.5;
        var mDispDistance = 2;
        var mBlowoutHeight = 15;
        var mDoTipTouch = true;
        var mTouchRetract = -14;

        // bindMixVolume = 0.6 * (transferVolume + beadVolume2);
        // bindMixVolume = (bindMixVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : bindMixVolume;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = mHeadMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 7
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1,tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = [[1,bindColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var mNumberSteps = Math.ceil(bindVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =mNumberSteps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 20
      TaskScript:
        task.Wellselection = [[1,bindColumn]];
        task.Volume = bindVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mAspDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 22
      TaskScript:
        task.Wellselection = [[1,bind2Column]];
        task.Volume = bindVolume / mNumberSteps;
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = mDispDistance;
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[1,bind2Column]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 5
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1, tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=transferSample
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mPreAspVolume = 15;
        var mBlowoutHeight = 20;
        var mDoTipTouch = true;
        var mTouchRetract = -19;
        var mGetTips = false;
        var mReturnTips = false;

        var bindMixVolume = 0.6 * (beadVolume1 + sampleVolume);
        bindMixVolume = (bindMixVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : bindMixVolume;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript:
        if(mGetTips) {
           task.Wellselection = [[1, tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 20
      TaskScript:
        task.Volume = sampleVolume;
        task.Distancefromwellbottom = 0.4;
        task.Dynamictipextension = dph(sampleVolume, 0.4);
        task.Preaspiratevolume = mPreAspVolume;
        task.Wellselection = [[1,sampleColumn]];
      Location, plate: SamplePlate
      Liquid class: j_slow_medium_vol
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,bindColumn]];
        task.Volume = sampleVolume;
      Location, plate: BindPlate
      Volume: 0
      Liquid class: j_normal_medium_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 24
      TaskScript:
        task.Wellselection = [[1,bindColumn]];
        task.Volume = bindMixVolume;
      Location, plate: BindPlate
      Volume: 0
      Liquid class: j_normal_mixing
      Mix cycles: 5
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      TaskScript:
        if(mPreAspVolume == 0 && !mDoTipTouch) {
           task.skip();
        }
        task.Wellselection = [[1,bindColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_blowout";
        task.Distancefromwellbottom = mBlowoutHeight;
        task.Performtiptouch = mDoTipTouch;
        if(mDoTipTouch) {
           task.Tiptouchretractdistance = mTouchRetract;
           task.Whichsidestousefortiptouch = "None";
        }
      Location, plate: BindPlate
      Liquid class: j_blowout
      Perform tip touch: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        if(mReturnTips) {
           task.Wellselection = [[1,tipColumn]];
        } else {
           task.skip();
        }
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=wash
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task BuiltIn::Group Begin
    Task BuiltIn::JavaScript
      TaskScript:
        var mHeadMode = headMode;
        var mGetTips = true;
        var mReturnTips = true;
        var mLiquidClass = "j_slow_large_vol";
        var mPreAspVolume = 15;
        var mAspDistance = 1;
        var mDispDistance = 1;
        // var mMixVolume = (0.8 * beadVolume > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : 0.8 * beadVolume;
        var mMixLiquidClass = "j_normal_mixing";
        var mMixCycles = 5;
        var mMixAspDistance = 1;
        var mMixDispDistance = 5;
        var mBlowoutHeight = 5;
        var mDoTipTouch = true;
        var mTouchRetract = -4;
    Task Bravo::secondary::Set Head Mode
      TaskScript: task.Headmode = headMode;
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task Bravo::secondary::Tips On
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,tipColumn]];
      Location, plate: NewTips
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop
      Number of times to loop: =washes; [1]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 3
      TaskScript:
        if(mPreAspVolume == 0) {
           task.skip();
        }
        task.Wellselection = [[1,etohColumn]];
        task.Volume = mPreAspVolume;
        task.Liquidclass = "j_normal_large_vol";
        task.Distancefromwellbottom = 50;
      Location, plate: RTreagentPlate
      Volume: =PRE_ASP;
      Liquid class: j_normal_large_vol
      Distance from well bottom: 45
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: var steps = Math.ceil(washVolume / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Volume = washVolume / steps;
        task.Wellselection = [[1,etohColumn]];
        task.Liquidclass = mLiquidClass;
        task.Distancefromwellbottom = etohAspHeight;
      Location, plate: RTreagentPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript:
        task.Volume = washVolume / steps;
        task.Wellselection = [[1,bind2Column]];
        task.Liquidclass = mLiquidClass;
      Location, plate: BindPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 15
      Perform tip touch: 1
      Tip touch retract distance: -14
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 21
      TaskScript:
        task.Volume = (washVolume * 0.8 > MAX_MIX_VOLUME) ? MAX_MIX_VOLUME : washVolume * 0.8;
        task.Wellselection = [[1,bind2Column]];
      Location, plate: BindPlate
      Liquid class: j_slow_mixing
      Mix cycles: 2
      Aspirate distance: 2
      Dispense at different distance: 1
      Dispense distance: 5
      Perform tip touch: 1
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = pelletTimeShort;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
    Task BuiltIn::JavaScript
      TaskScript: steps = Math.ceil((washVolume + 10) / MAX_VOLUME);
    Task BuiltIn::Loop
      Number of times to loop: =steps; [mTemp;]
      Change tips every N times, N = : 1
    Task Bravo::secondary::Aspirate
      Estimated time: 14
      TaskScript:
        task.Volume = (washVolume + 10) / steps;
        task.Wellselection = [[1,bind2Column]];
      Location, plate: BindPlate
      Liquid class: j_slow_large_vol
      Distance from well bottom: 0.75
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      TaskScript:
        task.Volume = (washVolume + 10) / steps;
        task.Wellselection = [[1,wasteColumn]];
      Location, plate: RTreagentPlate
      Liquid class: j_normal_large_vol
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      TaskScript: task.Wellselection = [[1,wasteColumn]];
      Location, plate: RTreagentPlate
      Volume: =PRE_ASP;
      Liquid class: j_blowout
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript: task.Wellselection = [[1,tipColumn]];
      Location, plate: NewTips
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
    Task BuiltIn::Reserve Location
      TaskScript: task.Reservationtime = ethanolDryTime;
      Location to use, plate: BindPlate
      Location to use, location: 7
      Reservation time: 0
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Cleanup_Processes
  Process
    Plate name: finish
    Task BuiltIn::JavaScript
      TaskScript:
        var email = global.formEmail;
        var protocolName = "AMPure XP size selection";

        if(typeof email === "string" && email.match(/[\w\d\.]+@[\w\d\.]+/)) {
        	(function() {
        		var msg = {
        			body: protocolName+" completed on "+new Date().toLocaleString(),
        			sub: protocolName+" has completed",
        			to: email
        		};
        		// Quote-ilize:
        		for(var i in msg) msg[i] = msg[i].replace(/.+/, "\"$&\"");
        		var script = "C:\\VWorks Workspace\\bravo_mailer.bat"
        		run([script, msg.to, msg.sub, msg.body].join(" "));
        	})();
        }

        global.formEmail = "";
